Dialog.create("Photo");
Dialog.addCheckbox("Do you need to crop the images before analysis?", false);
Dialog.show();
Cut = Dialog.getCheckbox();
if(Cut == true){
	setOption("JFileChooser", true);
	run("Set Measurements...", "area mean standard min centroid center bounding shape integrated median display redirect=None decimal=3");
	dir= getDirectory("Choose the folder containing the images");
	setOption("JFileChooser", false);
	

	imagenames=getFileList(dir); /// directory of the files
	nbimages=lengthOf(imagenames); /// name of the images

	Dialog.create("Select the start and end of the analysis");
	Dialog.addNumber("Which stack do you want to start?", 1);
	Dialog.addNumber("How many stacks do you have in the .lif file?", 0);
	Dialog.show();
	start = Dialog.getNumber();
	pend =Dialog.getNumber();
	end = pend+1;
	for(image=0; image<nbimages; image++) { /// Loop 
		name=imagenames[image];
		totnamelength=lengthOf(name); /// name extension
		namelength=totnamelength-4;
		name1=substring(name, 0, namelength);
		extension=substring(name, namelength, totnamelength);
		if(extension==".lif") {
		 for(stack=start; stack<end; stack++) {
			run("Bio-Formats Importer", "open=["+dir+File.separator+name+"] color_mode=Colorized open_files rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT series_"+stack);
			savename = getTitle();
			newname ="stack_"+stack;
			rename(newname);
			File.makeDirectory(dir+File.separator+"Cropped"+stack);
			getDimensions(width,height,channels,slices,frames);
			getPixelSize(unit,pw,ph);
			makeRectangle(0, 0, 20/pw, 20/ph);
			waitForUser ("Make a rectangle over the selected cells and press ctrl+t or just t");
			numROI=roiManager("count"); 
			for (i=0; i<numROI; i++){
				selectWindow(newname);
				roiManager("Select", i);
				run("Duplicate...", "title=["+name1+"_"+stack+"_"+i+"] duplicate");
				}
				selectWindow(newname);
				run("Close");
				openimages=nImages;
				for (ROIs=0; ROIs<openimages ; ROIs++) {
			    	cutname=getTitle();
			    	dircut = dir+File.separator+"Cropped"+stack;
			    	saveAs("Tiff", dircut+File.separator+cutname);    
			    	run("Close");
			}
			selectWindow("ROI Manager");
			run("Close");
	}
 }
	}
}
	
